PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant': '00', 'group': '1', 'order': 'A,A'}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1600, 900]
  expName = priming
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Routines
  Routine intro
    TextComponent intro_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Hello there ;)

        here goes the introduction text.

        please press any key to continue
    KeyboardComponent key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent csv_file
      Code Type = Auto->JS
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      Begin Experiment:
        import csv

        # taking the dialog window input from this session
        participant = str(expInfo['participant'])
        order = expInfo['order']
        group = str(expInfo['group'])

        sum_info = participant, group, order
        sum_info = list(sum_info)

        # naming the csv file
        all_sum_csv = "all_participant_summary.csv"

        # opening the all_participant_summary.csv file
        with open(all_sum_csv, 'a', newline='') as csvfile:
            csvwriter = csv.writer(csvfile)

        # writing the information from this session into the csv file
            csvwriter.writerow(sum_info)
  Routine end
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Thank you for participating,

        this is the end of this part of the measurement

        press any key to end the session
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine break_3
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        WE WERE ON A BREAK!

        press any key to continue
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine first_block_images
    PolygonComponent fixation_cross
      fillColor = $[1,1,1]
      lineWidth = 0.0001
      shape = cross
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    ImageComponent pos_image
      image [set every repeat] = $image
      saveStartStop = False
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 11.5
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  Routine second_block_images
    PolygonComponent fixation_cross_2
      fillColor = $[1,1,1]
      lineWidth = 0.0001
      shape = cross
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    ImageComponent pos_image_2
      image [set every repeat] = $image
      saveStartStop = False
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 11.5
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Flow
  Routine intro
  LoopInitiator pos_trials loopType="TrialHandler"
    conditionsFile = $expInfo['order'][0] + '.xlsx'
    loopType = random
    nReps = 1
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    Routine first_block_images
  LoopTerminator pos_trials
  Routine break_3
  LoopInitiator neg_trials loopType="TrialHandler"
    conditionsFile = $expInfo['order'][2] + '.xlsx'
    loopType = random
    nReps = 1
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    Routine second_block_images
  LoopTerminator neg_trials
  Routine end
